PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = 0.7255, 0.7255, 0.7255
  expName = Test
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Instruction
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    TextComponent Instruktion
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in our experiment!

        Press space to complete the experiment
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine important
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    TextComponent important1
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        !IMPORTANT MESSAGE!

        This experiment should be conducted with your head positioned straight forward and your gaze directed at the center of the screen. You may use the cross as a guide.

        Please do not turn your head to get a better view of the portraits (keep your head upright). Doing so will compromise our data collection.

        By continuing, I confirm that I have received and read the relevant consent forms.

        Press SPACE to begin the training phase
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine training_trial
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    ImageComponent image
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $"/Users/johannestangreuss/Desktop/nyeste_billeder/{:03d}_03.jpg".format(int(Stimulus))
      ori [set every repeat] = Displacement_Angle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.7
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import csv
        import random

        class TrialClass:
            def __init__(self, tn, ED, angle, stimulus):
                self.trial_number = tn
                self.exposure_duration = ED
                self.displacement_angle = angle
                self.stimulus = stimulus
                self.response = ""

        def assign_angles(faces, angles):
            """
            Assign angles to faces with an even distribution.
            """
            angle_assignment = {}
            num_faces_per_angle = len(faces) // len(angles)
            remainder = len(faces) % len(angles)

            for angle in angles:
                count = num_faces_per_angle + (1 if remainder > 0 else 0)
                assigned_faces = random.sample(faces, count)
                for face in assigned_faces:
                    angle_assignment[face] = angle
                    faces.remove(face)
                remainder -= 1

            return angle_assignment

        def save_to_csv(filename, trials):
            """
            Save trial data to a CSV file.
            """
            with open(filename, "w", newline='') as csvfile:
                writer = csv.writer(csvfile)
                writer.writerow(["Trial_Number", "Exposure_Duration", "Displacement_Angle", "Stimulus", "Response"])
                for trial in trials:
                    writer.writerow([trial.trial_number, trial.exposure_duration, trial.displacement_angle, trial.stimulus, trial.response])

        # Training Phase
        all_faces_pool = [str(i) for i in range(1, 85)]  # 28 faces
        angles = [0, 30, 60, 90, 120, 150, 180]  # 7 angles

        # Randomly select stimuli for training
        training_faces = random.sample(all_faces_pool, 42)
        training_angles = assign_angles(training_faces.copy(), angles.copy())  # Assign angles

        # Create training trials
        training_trials = []
        ED_training = 150  # Exposure duration
        for tn, (stimulus, angle) in enumerate(training_angles.items(), start=1):
            training_trials.append(TrialClass(tn, ED_training, angle, stimulus))


        # Save to CSV
        save_to_csv("Training_Datafile.csv", training_trials)

        # Save stimuli angles for reuse in the test phase
        with open("Stimuli_Angles.csv", "w", newline='') as csvfile:
            writer = csv.writer(csvfile)
            writer.writerow(["Stimulus", "Angle"])
            for stimulus, angle in training_angles.items():
                writer.writerow([stimulus, angle])
    PolygonComponent cross
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    ApertureComponent aperture
      shape = circle
      size = 0.6
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.7
      units = norm
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  Routine New_instruction
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have now reached the testing phase. Here, you will be presented with both familiar and unfamiliar stimuli. Your task is to distinguish between them.
        Press the right key arrow if you have seen the face before. Press left if you have not.
        You can respond as soon as the face is displayed.
        Please respond as quickly and accurately as you possibly can.
        Press SPACE to begin the testing phase.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $msg
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  Routine nyeste_instruks
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    TextComponent text_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have now reached the testing phase. Here, you will be presented with both familiar and unfamiliar stimuli. Your task is to distinguish between them.
        Press the right key arrow if you have seen the face before. Press left if you have not.
        You can respond as soon as the face is displayed.
        Please respond as quickly and accurately as you possibly can.
        Press SPACE to begin the testing phase.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine start_blok_2
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You are now entering block 2.

        When you press space you will enter the training phase of block 2.
  Routine test_trial
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    ImageComponent image_2
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $"/Users/johannestangreuss/Desktop/nyeste_billeder/{:03d}_03.jpg".format(int(Stimulus))
      ori [set every repeat] = Displacement_Angle
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 3.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        import csv
        import random

        class TrialClass:
            def __init__(self, tn, ED, angle, stimulus, is_distractor):
                self.trial_number = tn
                self.exposure_duration = ED
                self.displacement_angle = angle
                self.stimulus = stimulus
                self.is_distractor = is_distractor
                self.response = ""

        def split_faces(face_pool, used_faces):
            """
            Split a list of faces into distractors (not used in training).
            """
            return [face for face in face_pool if face not in used_faces]

        def assign_angles(faces, angles):
            """
            Assign angles to faces with an even distribution.
            """
            angle_assignment = {}
            num_faces_per_angle = len(faces) // len(angles)
            remainder = len(faces) % len(angles)

            for angle in angles:
                count = num_faces_per_angle + (1 if remainder > 0 else 0)
                assigned_faces = random.sample(faces, count)
                for face in assigned_faces:
                    angle_assignment[face] = angle
                    faces.remove(face)
                remainder -= 1

            return angle_assignment

        def save_to_csv(filename, trials):
            """
            Save trial data to a CSV file.
            """
            with open(filename, "w", newline='') as csvfile:
                writer = csv.writer(csvfile)
                writer.writerow(["Trial_Number", "Exposure_Duration", "Displacement_Angle", "Stimulus", "Is_Distractor", "Response"])
                for trial in trials:
                    writer.writerow([trial.trial_number, trial.exposure_duration, trial.displacement_angle, trial.stimulus, trial.is_distractor, trial.response])

        # Test Phase
        all_faces_pool = [str(i) for i in range(1, 85)]  # 28 faces

        # Load stimuli angles from training phase
        stimuli_angles = {}
        with open("Stimuli_Angles.csv", "r") as csvfile:
            reader = csv.DictReader(csvfile)
            for row in reader:
                stimuli_angles[row["Stimulus"]] = int(row["Angle"])

        # Split into stimuli and distractors
        stimuli_faces = list(stimuli_angles.keys())
        distractor_faces = split_faces(all_faces_pool, stimuli_faces)

        # Assign angles to distractors
        angles = [0, 30, 60, 90, 120, 150, 180]
        distractor_angles = assign_angles(distractor_faces.copy(), angles.copy())

        # Combine trials
        test_trials = []
        ED_test = 150  # Exposure duration
        trial_number = 1

        # Add stimuli trials (angles from training phase)
        for stimulus, angle in stimuli_angles.items():
            test_trials.append(TrialClass(trial_number, ED_test, angle, stimulus, False))
            trial_number += 1

        # Add distractor trials
        for stimulus, angle in distractor_angles.items():
            test_trials.append(TrialClass(trial_number, ED_test, angle, stimulus, True))
            trial_number += 1

        # Shuffle test trials
        random.shuffle(test_trials)

        # Save to CSV
        save_to_csv("Test_Datafile.csv", test_trials)
    PolygonComponent cross2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      store = first key
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    TextComponent text_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 5.0
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      text:
        Press RIGHT KEY  if you have seen the picture before

        Press LEFT KEY if you have NOT seen the picture before
    ApertureComponent aperture_2
      shape = circle
      size = 0.6
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 3.0
      units = norm
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  Routine training_2
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    ImageComponent image_3
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $"/Users/johannestangreuss/Desktop/nyeste_billeder/{:03d}_03.jpg".format(int(Stimulus)+86)
      ori [set every repeat] = Displacement_Angle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.7
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    CodeComponent code_3
      Code Type = Auto->JS
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      Before Experiment:
        import csv
        import random

        class TrialClass:
            def __init__(self, tn, ED, angle, stimulus):
                self.trial_number = tn
                self.exposure_duration = ED
                self.displacement_angle = angle
                self.stimulus = stimulus
                self.response = ""

        def assign_angles(faces, angles):
            """
            Assign angles to faces with an even distribution.
            """
            angle_assignment = {}
            num_faces_per_angle = len(faces) // len(angles)
            remainder = len(faces) % len(angles)

            for angle in angles:
                count = num_faces_per_angle + (1 if remainder > 0 else 0)
                assigned_faces = random.sample(faces, count)
                for face in assigned_faces:
                    angle_assignment[face] = angle
                    faces.remove(face)
                remainder -= 1

            return angle_assignment

        def save_to_csv(filename, trials):
            """
            Save trial data to a CSV file.
            """
            with open(filename, "w", newline='') as csvfile:
                writer = csv.writer(csvfile)
                writer.writerow(["Trial_Number", "Exposure_Duration", "Displacement_Angle", "Stimulus", "Response"])
                for trial in trials:
                    writer.writerow([trial.trial_number, trial.exposure_duration, trial.displacement_angle, trial.stimulus, trial.response])

        # Training Phase
        all_faces_pool = [str(i) for i in range(1, 71)]  # 28 faces
        angles = [0, 30, 60, 90, 120, 150, 180]  # 7 angles

        # Randomly select stimuli for training
        training_faces = random.sample(all_faces_pool, 35)
        training_angles = assign_angles(training_faces.copy(), angles.copy())  # Assign angles

        # Create training trials
        training_trials = []
        ED_training = 150  # Exposure duration
        for tn, (stimulus, angle) in enumerate(training_angles.items(), start=1):
            training_trials.append(TrialClass(tn, ED_training, angle, stimulus))

        # Save to CSV
        save_to_csv("Training_Datafile.csv", training_trials)

        # Save stimuli angles for reuse in the test phase
        with open("Stimuli_Angles.csv", "w", newline='') as csvfile:
            writer = csv.writer(csvfile)
            writer.writerow(["Stimulus", "Angle"])
            for stimulus, angle in training_angles.items():
                writer.writerow([stimulus, angle])
    PolygonComponent cross_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    ApertureComponent aperture_3
      shape = circle
      size = 0.6
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.7
      units = norm
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  Routine test_2
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    ImageComponent image_4
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $"/Users/johannestangreuss/Desktop/nyeste_billeder/{:03d}_03.jpg".format(int(Stimulus)+86)
      ori [set every repeat] = Displacement_Angle
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 3.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Before Experiment:
        import csv
        import random

        class TrialClass:
            def __init__(self, tn, ED, angle, stimulus, is_distractor):
                self.trial_number = tn
                self.exposure_duration = ED
                self.displacement_angle = angle
                self.stimulus = stimulus
                self.is_distractor = is_distractor
                self.response = ""

        def split_faces(face_pool, used_faces):
            """
            Split a list of faces into distractors (not used in training).
            """
            return [face for face in face_pool if face not in used_faces]

        def assign_angles(faces, angles):
            """
            Assign angles to faces with an even distribution.
            """
            angle_assignment = {}
            num_faces_per_angle = len(faces) // len(angles)
            remainder = len(faces) % len(angles)

            for angle in angles:
                count = num_faces_per_angle + (1 if remainder > 0 else 0)
                assigned_faces = random.sample(faces, count)
                for face in assigned_faces:
                    angle_assignment[face] = angle
                    faces.remove(face)
                remainder -= 1

            return angle_assignment

        def save_to_csv(filename, trials):
            """
            Save trial data to a CSV file.
            """
            with open(filename, "w", newline='') as csvfile:
                writer = csv.writer(csvfile)
                writer.writerow(["Trial_Number", "Exposure_Duration", "Displacement_Angle", "Stimulus", "Is_Distractor", "Response"])
                for trial in trials:
                    writer.writerow([trial.trial_number, trial.exposure_duration, trial.displacement_angle, trial.stimulus, trial.is_distractor, trial.response])

        # Test Phase
        all_faces_pool = [str(i) for i in range(1, 71)]  # 28 faces

        # Load stimuli angles from training phase
        stimuli_angles = {}
        with open("Stimuli_Angles.csv", "r") as csvfile:
            reader = csv.DictReader(csvfile)
            for row in reader:
                stimuli_angles[row["Stimulus"]] = int(row["Angle"])

        # Split into stimuli and distractors
        stimuli_faces = list(stimuli_angles.keys())
        distractor_faces = split_faces(all_faces_pool, stimuli_faces)

        # Assign angles to distractors
        angles = [0, 30, 60, 90, 120, 150, 180]
        distractor_angles = assign_angles(distractor_faces.copy(), angles.copy())

        # Combine trials
        test_trials = []
        ED_test = 150  # Exposure duration
        trial_number = 1

        # Add stimuli trials (angles from training phase)
        for stimulus, angle in stimuli_angles.items():
            test_trials.append(TrialClass(trial_number, ED_test, angle, stimulus, False))
            trial_number += 1

        # Add distractor trials
        for stimulus, angle in distractor_angles.items():
            test_trials.append(TrialClass(trial_number, ED_test, angle, stimulus, True))
            trial_number += 1

        # Shuffle test trials
        random.shuffle(test_trials)

        # Save to CSV
        save_to_csv("Test_Datafile.csv", test_trials)
    PolygonComponent cross2_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_7
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      store = first key
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    TextComponent text_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 5.0
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      text:
        Press RIGHT KEY  if you have seen the picture before

        Press LEFT KEY if you have NOT seen the picture before
    ApertureComponent aperture_4
      shape = circle
      size = 0.6
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 3.0
      units = norm
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  Routine Intro_to_experiment
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    TextComponent important1_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        The following experiment contains 2 blocks with a training phase and a testing phase in each block.
        In the training you will be presented with lots of faces in varying angles in succesion.
        The faces presented in the training will also be present in the test phase, but in addition there are faces you have not seen before. There is an equal amount of old and new faces in both blocks.
        Your task is to indicate whether you have seen the faces before as quickly and accurately as possible.

        Is your task clear? If not, feel free to ask your instructor.
        Press space to continue
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine training_instruction
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent important1_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You are now entering the training of block 1.
        You will be presented with 42 faces (in varying angles) in succesion. The faces will all be displayed for 1.5 seconds.
        Your task is only to focus on the faces, so that you can hopefully remember them in the test phase following.

        Press space to enter training
Flow
  Routine Intro_to_experiment
  Routine important
  Routine training_instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Training_Datafile.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Trial_Number', 1), ('Exposure_Duration', 150), ('Displacement_Angle', 0), ('Stimulus', 51), ('Response', None)]),
      OrderedDict([('Trial_Number', 2), ('Exposure_Duration', 150), ('Displacement_Angle', 0), ('Stimulus', 10), ('Response', None)]),
      OrderedDict([('Trial_Number', 3), ('Exposure_Duration', 150), ('Displacement_Angle', 0), ('Stimulus', 54), ('Response', None)]),
      OrderedDict([('Trial_Number', 4), ('Exposure_Duration', 150), ('Displacement_Angle', 0), ('Stimulus', 64), ('Response', None)]),
      OrderedDict([('Trial_Number', 5), ('Exposure_Duration', 150), ('Displacement_Angle', 0), ('Stimulus', 50), ('Response', None)]),
      OrderedDict([('Trial_Number', 6), ('Exposure_Duration', 150), ('Displacement_Angle', 30), ('Stimulus', 66), ('Response', None)]),
      OrderedDict([('Trial_Number', 7), ('Exposure_Duration', 150), ('Displacement_Angle', 30), ('Stimulus', 38), ('Response', None)]),
      OrderedDict([('Trial_Number', 8), ('Exposure_Duration', 150), ('Displacement_Angle', 30), ('Stimulus', 30), ('Response', None)]),
      OrderedDict([('Trial_Number', 9), ('Exposure_Duration', 150), ('Displacement_Angle', 30), ('Stimulus', 69), ('Response', None)]),
      OrderedDict([('Trial_Number', 10), ('Exposure_Duration', 150), ('Displacement_Angle', 30), ('Stimulus', 62), ('Response', None)]),
      OrderedDict([('Trial_Number', 11), ('Exposure_Duration', 150), ('Displacement_Angle', 60), ('Stimulus', 39), ('Response', None)])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
    Routine training_trial
  LoopTerminator trials
  Routine New_instruction
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Test_Datafile.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Trial_Number', 62), ('Exposure_Duration', 150), ('Displacement_Angle', 150), ('Stimulus', 6), ('Is_Distractor', True), ('Response', None)]),
      OrderedDict([('Trial_Number', 66), ('Exposure_Duration', 150), ('Displacement_Angle', 180), ('Stimulus', 24), ('Is_Distractor', True), ('Response', None)]),
      OrderedDict([('Trial_Number', 36), ('Exposure_Duration', 150), ('Displacement_Angle', 0), ('Stimulus', 7), ('Is_Distractor', True), ('Response', None)]),
      OrderedDict([('Trial_Number', 37), ('Exposure_Duration', 150), ('Displacement_Angle', 0), ('Stimulus', 4), ('Is_Distractor', True), ('Response', None)]),
      OrderedDict([('Trial_Number', 45), ('Exposure_Duration', 150), ('Displacement_Angle', 30), ('Stimulus', 13), ('Is_Distractor', True), ('Response', None)]),
      OrderedDict([('Trial_Number', 48), ('Exposure_Duration', 150), ('Displacement_Angle', 60), ('Stimulus', 57), ('Is_Distractor', True), ('Response', None)]),
      OrderedDict([('Trial_Number', 29), ('Exposure_Duration', 150), ('Displacement_Angle', 150), ('Stimulus', 25), ('Is_Distractor', False), ('Response', None)]),
      OrderedDict([('Trial_Number', 58), ('Exposure_Duration', 150), ('Displacement_Angle', 120), ('Stimulus', 17), ('Is_Distractor', True), ('Response', None)]),
      OrderedDict([('Trial_Number', 42), ('Exposure_Duration', 150), ('Displacement_Angle', 30), ('Stimulus', 3), ('Is_Distractor', True), ('Response', None)])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
    Routine test_trial
  LoopTerminator trials_2
  Routine start_blok_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = Training_Datafile.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Trial_Number', 1), ('Exposure_Duration', 150), ('Displacement_Angle', 0), ('Stimulus', 35), ('Response', None)]),
      OrderedDict([('Trial_Number', 2), ('Exposure_Duration', 150), ('Displacement_Angle', 0), ('Stimulus', 16), ('Response', None)]),
      OrderedDict([('Trial_Number', 3), ('Exposure_Duration', 150), ('Displacement_Angle', 0), ('Stimulus', 46), ('Response', None)]),
      OrderedDict([('Trial_Number', 4), ('Exposure_Duration', 150), ('Displacement_Angle', 0), ('Stimulus', 34), ('Response', None)]),
      OrderedDict([('Trial_Number', 5), ('Exposure_Duration', 150), ('Displacement_Angle', 0), ('Stimulus', 15), ('Response', None)]),
      OrderedDict([('Trial_Number', 6), ('Exposure_Duration', 150), ('Displacement_Angle', 30), ('Stimulus', 31), ('Response', None)]),
      OrderedDict([('Trial_Number', 7), ('Exposure_Duration', 150), ('Displacement_Angle', 30), ('Stimulus', 62), ('Response', None)]),
      OrderedDict([('Trial_Number', 8), ('Exposure_Duration', 150), ('Displacement_Angle', 30), ('Stimulus', 69), ('Response', None)]),
      OrderedDict([('Trial_Number', 9), ('Exposure_Duration', 150), ('Displacement_Angle', 30), ('Stimulus', 64), ('Response', None)]),
      OrderedDict([('Trial_Number', 10), ('Exposure_Duration', 150), ('Displacement_Angle', 30), ('Stimulus', 13), ('Response', None)]),
      OrderedDict([('Trial_Number', 11), ('Exposure_Duration', 150), ('Displacement_Angle', 60), ('Stimulus', 59), ('Response', None)])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
    Routine training_2
  LoopTerminator trials_3
  Routine nyeste_instruks
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = Test_Datafile.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Trial_Number', 1), ('Exposure_Duration', 500), ('Displacement_Angle', 30), ('Stimulus', 28), ('Stimulus_Status', 'new'), ('Response', None)]),
      OrderedDict([('Trial_Number', 2), ('Exposure_Duration', 500), ('Displacement_Angle', 60), ('Stimulus', 8), ('Stimulus_Status', 'old'), ('Response', None)]),
      OrderedDict([('Trial_Number', 3), ('Exposure_Duration', 500), ('Displacement_Angle', 0), ('Stimulus', 21), ('Stimulus_Status', 'new'), ('Response', None)]),
      OrderedDict([('Trial_Number', 4), ('Exposure_Duration', 500), ('Displacement_Angle', 0), ('Stimulus', 11), ('Stimulus_Status', 'old'), ('Response', None)]),
      OrderedDict([('Trial_Number', 5), ('Exposure_Duration', 500), ('Displacement_Angle', 0), ('Stimulus', 6), ('Stimulus_Status', 'old'), ('Response', None)]),
      OrderedDict([('Trial_Number', 6), ('Exposure_Duration', 500), ('Displacement_Angle', 120), ('Stimulus', 10), ('Stimulus_Status', 'old'), ('Response', None)]),
      OrderedDict([('Trial_Number', 7), ('Exposure_Duration', 500), ('Displacement_Angle', 0), ('Stimulus', 29), ('Stimulus_Status', 'new'), ('Response', None)]),
      OrderedDict([('Trial_Number', 8), ('Exposure_Duration', 500), ('Displacement_Angle', 180), ('Stimulus', 13), ('Stimulus_Status', 'old'), ('Response', None)]),
      OrderedDict([('Trial_Number', 9), ('Exposure_Duration', 500), ('Displacement_Angle', 60), ('Stimulus', 17), ('Stimulus_Status', 'new'), ('Response', None)])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
    Routine test_2
  LoopTerminator trials_4
  Routine Instruction
